OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = D:/6099/CSP_2/online_player
  Use compression = false
#0.Signal stream -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = D:/BCI/Motor Imagery/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #8
Features=#8 -> Classifier processor => #9
  Filename to load configuration from = D:/BCI/Motor Imagery/motor-imagery-bci-config-classifier.cfg
#9.Probability values -> Matrix Transpose
-> Simple DSP => #11
  Equation = x
Input signal=#11 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
Graz Motor Imagery BCI Stimulator => #13
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#13, Amplitude=#9.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
